dataset_list2 = newArray(
	"Medaka_401_32-2_large",
"Medaka_402_32-2_large",
"Medaka_403_32-2_large",
"Medaka_404_32-2_large",
"Medaka_405_32-2_large"
	);

dataset_list = newArray(
"Medaka_415_5-1",
"Medaka_417_5-1",
"Medaka_418_5-1",
"Medaka_419_5-1",
"Medaka_420_5-1",
"Medaka_421_5-1",
"Medaka_423_11-1",
"Medaka_424_11-1",
"Medaka_425_11-1",
"Medaka_426_11-1",
"Medaka_427_11-1",
"Medaka_428_11-1",
"Medaka_431_11-1",
"Medaka_436_11-1",
"Medaka_437_11-1",
"Medaka_444_18-2",
"Medaka_445_18-2",
"Medaka_446_18-2",
"Medaka_447_18-2",
"Medaka_448_18-2",
"Medaka_449_18-2",
"Medaka_450_18-2",
"Medaka_451_18-2",
"Medaka_452_21-2",
"Medaka_453_21-2",
"Medaka_454_21-2",
"Medaka_455_21-2",
"Medaka_456_21-2",
"Medaka_458_21-2",
"Medaka_459_21-2",
"Medaka_460_21-2",
"Medaka_461_21-2",
"Medaka_462_21-2",
"Medaka_463_21-2",
"Medaka_464_21-2",
"Medaka_465_21-2",
"Medaka_466_21-2",
"Medaka_468_23-1",
"Medaka_469_23-1",
"Medaka_470_23-1",
"Medaka_471_23-1",
"Medaka_472_23-1",
"Medaka_473_23-1",
"Medaka_474_23-1",
"Medaka_475_23-1",
"Medaka_476_23-1",
"Medaka_483_29-1",
"Medaka_484_29-1",
"Medaka_485_29-1",
"Medaka_486_29-1",
"Medaka_487_29-1",
"Medaka_488_29-1",
"Medaka_489_29-1",
"Medaka_491_29-1",
"Medaka_492_29-1",
"Medaka_493_29-1",
"Medaka_495_29-1",
"Medaka_496_30-1",
"Medaka_497_30-1",
"Medaka_498_30-1",
"Medaka_500_30-1",
"Medaka_501_30-1",
"Medaka_502_30-1",
"Medaka_503_30-1",
"Medaka_504_30-1",
"Medaka_508_33-1",
"Medaka_509_33-1",
"Medaka_511_33-1",
"Medaka_512_33-1",
"Medaka_513_33-1",
"Medaka_514_33-1",
"Medaka_515_33-1",
"Medaka_516_33-1",
"Medaka_526_39-2",
"Medaka_527_39-2",
"Medaka_528_39-2",
"Medaka_529_39-2",
"Medaka_530_39-2",
"Medaka_531_39-2",
"Medaka_533_49-1",
"Medaka_534_49-1",
"Medaka_535_49-1",
"Medaka_536_49-1",
"Medaka_537_49-1",
"Medaka_538_49-1",
"Medaka_539_49-1",
"Medaka_540_49-1",
"Medaka_541_49-1",
"Medaka_542_49-1",
"Medaka_543_49-1",
"Medaka_544_49-1",
"Medaka_545_49-1",
"Medaka_546_49-1",
"Medaka_547_49-1",
"Medaka_548_49-1",
"Medaka_552_50-2",
"Medaka_554_50-2",
"Medaka_555_50-2",
"Medaka_556_50-2",
"Medaka_557_50-2",
"Medaka_559_50-2",
"Medaka_560_50-2",
"Medaka_561_50-2",
"Medaka_562_50-2",
"Medaka_563_50-2",
"Medaka_565_50-2",
"Medaka_566_50-2",
"Medaka_574_58-2",
"Medaka_575_58-2",
"Medaka_576_58-2",
"Medaka_577_58-2",
"Medaka_578_58-2",
"Medaka_581_58-2",
"Medaka_582_58-2",
"Medaka_584_58-2",
"Medaka_585_58-2",
"Medaka_586_58-2",
"Medaka_588_58-2",
"Medaka_590_58-2",
"Medaka_591_58-2",
"Medaka_592_58-2",
"Medaka_593_59-2",
"Medaka_594_59-2",
"Medaka_595_59-2",
"Medaka_596_59-2",
"Medaka_597_59-2",
"Medaka_598_59-2",
"Medaka_601_59-2",
"Medaka_602_59-2",
"Medaka_603_59-2",
"Medaka_604_59-2",
"Medaka_605_59-2",
"Medaka_606_61-1",
"Medaka_607_61-1",
"Medaka_608_61-1",
"Medaka_609_61-1",
"Medaka_610_61-1",
"Medaka_611_61-1",
"Medaka_612_61-1",
"Medaka_613_68-1",
"Medaka_614_68-1",
"Medaka_615_68-1",
"Medaka_616_68-1",
"Medaka_617_68-1",
"Medaka_618_68-1",
"Medaka_619_68-1",
"Medaka_621_69-1",
"Medaka_622_69-1",
"Medaka_623_69-1",
"Medaka_624_69-1",
"Medaka_625_69-1",
"Medaka_626_69-1",
"Medaka_627_69-1",
"Medaka_628_69-1",
"Medaka_629_69-1",
"Medaka_630_69-1",
"Medaka_631_69-1",
"Medaka_634_69-1",
"Medaka_636_69-1",
"Medaka_637_72-1",
"Medaka_638_72-1",
"Medaka_639_72-1",
"Medaka_640_72-1",
"Medaka_641_72-1",
"Medaka_644_72-1",
"Medaka_646_72-1",
"Medaka_648_72-2",
"Medaka_649_72-2",
"Medaka_650_72-2",
"Medaka_651_72-2",
"Medaka_652_72-2",
"Medaka_653_72-2",
"Medaka_654_72-2",
"Medaka_655_72-2",
"Medaka_656_72-2",
"Medaka_658_72-2",
"Medaka_659_72-2",
"Medaka_660_72-2",
"Medaka_670_80-1",
"Medaka_671_80-1",
"Medaka_672_80-1",
"Medaka_673_80-1",
"Medaka_674_80-1",
"Medaka_675_80-1",
"Medaka_677_80-1",
"Medaka_679_80-1",
"Medaka_680_80-1",
"Medaka_684_80-1",
"Medaka_685_80-1",
"Medaka_686_80-1",
"Medaka_687_80-1",
"Medaka_688_80-2",
"Medaka_689_80-2",
"Medaka_691_80-2",
"Medaka_692_80-2",
"Medaka_693_80-2",
"Medaka_694_80-2",
"Medaka_695_80-2",
"Medaka_699_80-2",
"Medaka_700_80-2",
"Medaka_702_80-2",
"Medaka_703_80-2",
"Medaka_704_80-2",
"Medaka_705_89-1",
"Medaka_706_89-1",
"Medaka_707_89-1",
"Medaka_708_89-1",
"Medaka_709_89-1",
"Medaka_710_89-1",
"Medaka_711_89-1",
"Medaka_712_89-1",
"Medaka_713_89-1",
"Medaka_719_123-2",
"Medaka_720_123-2",
"Medaka_721_123-2",
"Medaka_722_123-2",
"Medaka_723_123-2",
"Medaka_724_123-2");

//dataset = "Medaka_417_5-1";

for (i=0; i<dataset_list2.length; i++) {

	dataset = dataset_list2[i];
	
	//path = "201905_beamtime_medaka_stained";
	//path = "201912_beamtime_medaka";
	//path = "202012_beamtime_medaka";
	path = "2018_11";
	
	setBatchMode("hide");
	
	close("*");
	
	
	path_dir = "/autofs/LSDF/projects/code-vita/Medaka/";
	output_dir = "/mnt/LSDF/tomo/ershov/medaka/workshop_landmarks/2018_11_label_projections/";
	//path_dir = "/autofs/HD-LSDF/sd20d002/";
	
	run("TIFF Virtual Stack...", "open=" + path_dir +path+"/"+ dataset+"/brain_scaled_0.5_8bit_slices.tif");
	rename("orig");
	
	num_slices = nSlices;
	
	start_slice = num_slices - round(num_slices * 0.35);
	end_slice = num_slices - round(num_slices * 0.03);
	
	
	run("Duplicate...", "duplicate range="+toString(start_slice)+"-"+toString(end_slice));
	rename(dataset);
	
	run("3-3-2 RGB");
	//run("Brightness/Contrast...");
	setMinAndMax(0, 12);
	run("RGB Color");
	
	selectWindow("orig");
	close();
	
	
	
	
	selectWindow(dataset);
	run("Z Project...", "projection=[Standard Deviation]");
	rename("proj_xy");
	run("Auto Crop");
	height1 = getHeight();
	
	selectWindow(dataset);
	run("Reslice [/]...", "output=1.000 start=Top avoid");
	rename("reslice_top");
	
	run("Z Project...", "projection=[Standard Deviation]");
	rename("proj_xz");
	run("Auto Crop");
	run("Flip Vertically");
	
	//width = getWidth();
	height2 = getHeight();
	
	selectWindow(dataset);
	run("Reslice [/]...", "output=1.000 start=Left avoid");
	rename("reslice_left");
	run("Z Project...", "projection=[Standard Deviation]");
	rename("proj_yz");
	run("Auto Crop");
	run("Flip Vertically");
	width = getWidth();
	
	run("Canvas Size...", "width="+toString(width) +" height="+toString(height1 + height2)+" position=Top-Center");
	
	
	run("Combine...", "stack1="+ "proj_xz" +" stack2="+"proj_xy"+" combine");
	rename("comb1");
	
	run("Combine...", "stack1="+ "comb1" +" stack2="+"proj_yz");
	rename(dataset + "_results");
	saveAs("PNG", output_dir + dataset + "_label_preview.png");
	
	
	selectWindow("reslice_top");
	close();
	selectWindow("reslice_left");
	close();
	
	
	
	
	
	selectWindow(dataset);
	close();
	
	
	
	//setBatchMode("exit and display");

}

showMessage("Finished!");